PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1920, 1080]
  expName = Target_Distance
  keyboardBackend = ioHub
  logging level = data
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Routines
  Routine introduction
    PolygonComponent background_black
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    PolygonComponent background_white
      fillColor = white
      lineColor = red
      lineWidth = 20
      saveStartStop = False
      shape = rectangle
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent intro_text
      color = black
      letterHeight = .05
      pos = (0, .1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Thanks for participating in our study.

        In this experiment, you will use your apple as a reference size to judge target distances and sizes in a virtual scene.
        Please take out the apple now.

        The experiment was designed to be done on a monitor, so DO NOT do this experiment on a cellphone or a tablet (e.g., iPad).
        Please use a desktop computer with a monitor or a laptop.
    TextComponent next_text
      color = red
      letterHeight = 0.05
      pos = (0, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = < press SPACEBAR to continue. >
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    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine consent
    PolygonComponent background_black0
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    PolygonComponent background_white0
      fillColor = white
      lineColor = red
      lineWidth = 20
      saveStartStop = False
      shape = rectangle
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent consent_text
      color = black
      letterHeight = 0.022
      pos = (0, .075)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Informed Consent Form

        Study Name: Size and depth perception in a 2D scene

        Researchers: Laurence Harris 1022 SHSRC harris@yorku.ca, John Jong-Jin Kim 1018 SHSRC johnk84@my.yorku.ca

        Purpose of the Research: To determine the relationship between size and depth of an object in a 2D scene.

        What You Will Be Asked to Do in the Research: You will see a target in a 2D scene on a computer screen while sitting on a chair. You will be asked to enter the size of your smartphone which will determine the target size. Using a mouse, you will either move the target closer/further away in the 2D scene based on its size, or adjust the target size larger/smaller based on its distance. The experiment will take approximately 20 mins.

        Voluntary Participation: Your participation in the study is completely voluntary and you may choose to stop participating at any time.  Your decision not to volunteer will not influence the nature of the ongoing relationship you may have with the researchers or study staff or the nature of your relationship with York University either now, or in the future.

        Withdrawal from the Study:  You can stop participating in the study at any time, for any reason, if you so decide. Your decision to stop participating, or to refuse to answer particular questions, will not affect your relationship with the researchers, York University, or any other group associated with this project. In the event you withdraw from the study, all associated data collected will be immediately destroyed wherever possible.

        Confidentiality: All information you supply during the research will be held in confidence and unless you specifically indicate your consent, your name will not appear in any report or publication of the research. Data will be collected through the experimental computer program and by the researcher. Your personal information will be safely stored in a locked facility only research staff will have access to this information. Your data will be held until the study is complete. At this time your data will be destroyed. Confidentiality will be provided to the fullest extent possible by the law.

        Questions About the Research?  If you have questions about the research in general or about your role in the study, please feel free to contact the experimenter by e-mail (johnk84@my.yorku.ca).  This research has been reviewed and approved by the Human Participants Review Sub-Committee, York University’s Ethics Review Board and conforms to the standards of the Canadian Tri-Council Research Ethics guidelines.  If you have any questions about this process, or about your rights as a participant in the study, please contact the Sr. Manager & Policy Advisor for the Office of Research Ethics, 5th Floor, York Research Tower, York University (telephone 416-736-5914 or e-mail ore@yorku.ca).
    TextComponent agreement_text
      color = red
      letterHeight = 0.023
      pos = (0, -.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        If you agree and consent to participating in this study, press SPACEBAR to continue the test.

        If you do not wish to participate in this study, you can press ESC to end the test now. You can press ESC to stop testing anytime during the test, in which case any collected data will be deleted and will not be used for the study.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine exp_task2_introduction
    PolygonComponent background_black8
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    PolygonComponent background_white8
      fillColor = white
      lineColor = red
      lineWidth = 20
      saveStartStop = False
      shape = rectangle
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent isntru_text_02
      color = black
      letterHeight = 0.04
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Test 1

        The test is now ready to start.
        Please, keep your eyes 50cm away from the screen.


        When the test starts, you will see a hallway scene with stone walls on both left and right sides and grass on the ground. Then, an apple will appear at a distance which will be standing (upright) on the ground.
        Imagine the apple standing at distance in the scene is the apple you have and adjust its size to match the reference size (size of your apple) considering how far away the apple is from you.

        Moving the mouse 'up' will make the apple larger, 'down' will make the apple smaller.
        Press SPACEBAR when you think the apple is correct size (size of your apple).
    TextComponent next_text4
      color = red
      letterHeight = 0.04
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = < Please indicate if you received a whole apple ('w') or a sliced apple ('s') to start the test. >
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    CodeComponent size_task_variables
      Code Type = Auto->JS
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      Begin Routine:
        # target distances - proportional to the scene
        tar_dist_1 = -((87.5 - 14) / (2 * 87.5))   # target at 4m
        tar_dist_2 = -((87.5 - 53) / (2 * 87.5))  # target at 8m
        tar_dist_3 = -((87.5 - 65) / (2 * 87.5))   # target at 12m
        tar_dist_4 = -((87.5 - 71) / (2 * 87.5))  # target at 16m
        tar_dist_5 = -((87.5 - 74) / (2 * 87.5))   # target at 20m

        # target distances - proportional to the monitor
        # tar_dist_6 = -212.5 / (2 * ref_length)   # target at -212.5mm from horizon
        # tar_dist_7 = -106.25 / (2 * ref_length)   # target at -106.25mm from horizon
        # tar_dist_8 = -70.83 / (2 * ref_length)   # target at -70.83mm from horizon
        # tar_dist_9 = -53.125 / (2 * ref_length)   # target at -53.125mm from horizon
        # tar_dist_10 = -42.5 / (2 * ref_length)  # target at -42.5mm from horizon

        # target distance list
        #tar_dist_list = [tar_dist_1, tar_dist_2, tar_dist_3, tar_dist_4, tar_dist_5, tar_dist_6, tar_dist_7, tar_dist_8, tar_dist_9, tar_dist_10]
        tar_dist_list = [tar_dist_1, tar_dist_2, tar_dist_3, tar_dist_4, tar_dist_5, tar_dist_1, tar_dist_2, tar_dist_3, tar_dist_4, tar_dist_5]

        # trial number
        trialNum = 4
    KeyboardComponent key_resp_2
      allowedKeys = 'w', 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exp_task1_instruction_2
    PolygonComponent background_black4
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    PolygonComponent background_white4
      fillColor = white
      lineColor = red
      lineWidth = 20
      saveStartStop = False
      shape = rectangle
      size = (1.77, 1)
      startVal [time (s)] = 0.0
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    TextComponent instru_text_01
      color = black
      letterHeight = .04
      pos = (0, .1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Test 2

        In this test, you will be adjusting the apple's distance in the scene to match the reference size (size of your apple).

        Please, maintain your eyes 50cm away from the screen.

        Imagine that 'apple' is the same size as your apple. Determine how far away it should be in the hallway considering its size. Then, move the apple to that distance by moving the mouse up and down.

        Moving the mouse 'up' will move the apple further away, 'down' will move the apple closer.
        Press SPACEBAR when you think the apple is at the correct distance.
    TextComponent next_text3
      color = red
      letterHeight = 0.04
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = < press SPACEBAR to continue. >
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # get average target size
        average_size_1 = size_resp_Sum[0] / trialNum
        average_size_2 = size_resp_Sum[1] / trialNum
        average_size_3 = size_resp_Sum[2] / trialNum
        average_size_4 = size_resp_Sum[3] / trialNum
        average_size_5 = size_resp_Sum[4] / trialNum

        average_size_6 = size_resp_Sum[5] / trialNum
        average_size_7 = size_resp_Sum[6] / trialNum
        average_size_8 = size_resp_Sum[7] / trialNum
        average_size_9 = size_resp_Sum[8] / trialNum
        average_size_10 = size_resp_Sum[9] / trialNum

        trial_counter = 0
      End Routine:
        #size modifiers
        size_mod = [average_size_1, average_size_2, average_size_3, average_size_4, average_size_5, average_size_6, average_size_7, average_size_8, average_size_9, average_size_10]
        #size_mod = [0.1, 0.2, 0.3, 0.4, 0.5]
  Routine distance_task
    ImageComponent hallway_background2
      image = brick_hallway.png
      size = (1.8, 1)
      startVal [time (s)] = 3
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    CodeComponent move_stimuli
      Code Type = Auto->JS
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      Begin Experiment:
        # target distance sum
        dist_resp_Sum = [0,0,0,0,0,0,0,0,0,0]


        # target number
        target_num = 0
      Begin Routine:
        # hide mouse cursor
        #win.mouseVisible = False
        #document.body.style.cursor='none';

        #set scene
        test_scene = scene_path[obj_position]

        # randomly position target
        #import random
        #targetPos=[0.0, random.uniform(-.45,0.01)]
        targetPos=[0,0]

        # determine target size
        reference_size = [0.15,0.15]

        #targetSize = [reference_size[0]*size_modifier, reference_size[1]*size_modifier]

        # set target position
        targetSize = [(reference_size[0]*size_mod[cond]), (reference_size[1]*size_mod[cond])]

        #targetSize[0]=phoneSize[1]*size_modifier
        #targetSize[1]=phoneSize[0]*size_modifier
        #targetSize[0]=phoneSize[1]
        #targetSize[1]=phoneSize[0]

        max_height = -0.01
        min_height = -.49
      Each Frame:
        #keys = event.getKeys()

        #if targetPos[1] < min_height:
        #    targetPos[1] = min_height + .001
        #    tar_mov = 0
        #elif targetPos[1] > max_height:
        #    targetPos[1] = max_height - .001
        #    tar_mov = 0
        #else:
        #    targetPos[1] = targetPos[1] + tar_mov

        #if keys:
        #    if 'down' in keys:
        #        tar_mov = -.01
        #
        #    if 'up' in keys:
        #        tar_mov = .01
        #else:
        #    tar_mov = 0

        # skip if it was skipped in test 1
        if size_mod[cond] > 0.9:
            targetPos[1] = 0
            continueRoutine = False
        else:
            mouse_y = mouse.getPos()[1]
            targetPos_y = mouse_y
            if (mouse_y > min_height) and (mouse_y < max_height):
                targetPos[1] = mouse_y + (targetSize[1]/2)
      End Routine:
        # save target position data
        #thisExp.addData('tar_position', targetPos_y)
        psychoJS.experiment.addData('tar_position', targetPos_y)

        # save target size data
        #thisExp.addData('tar_size', size_modifier)
        psychoJS.experiment.addData('tar_size', size_mod[cond])

        # show mouse cursor
        #win.mouseVisible = True
        document.body.style.cursor='auto';

        dist_resp_Sum[cond] = dist_resp_Sum[cond] + (targetPos[1] - (targetSize[1]/2))

        trial_counter = trial_counter + 1
    PolygonComponent fix_cross1
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (.15, .15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent target_brick1
      fillColor = black
      lineColor = black
      nVertices = 1000
      pos [set every frame] = $targetPos
      saveStartStop = False
      shape = rectangle
      size [set every frame] = $targetSize
      startVal [time (s)] = 3
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    TextComponent test_inst_text1
      color = black
      letterHeight = 0.025
      pos = (0, .45)
      saveStartStop = False
      startVal [time (s)] = 3.5
      text = press SPACEBAR when you think the apple is at the correct distance.
      wrapWidth = .5
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3.5
      store = nothing
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent apple_distance
      image = apple_apple.png
      pos [set every frame] = $targetPos
      size [set every frame] = $targetSize
      startVal [time (s)] = 3
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  Routine size_task
    ImageComponent hallway_background1
      image = brick_hallway.png
      size = (1.8, 1)
      startVal [time (s)] = 2
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    CodeComponent size_stim
      Code Type = Auto->JS
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      Begin Experiment:
        # target size sum
        size_resp_Sum = [0, 0, 0, 0, 0, 0, 0, 0, 0, 0]


        textFill_dist = ''
        test_scene = ''

        scene_path_1a = 'brick_hallway.png'
        scene_path_1b = 'brick_hallway.png'
        scene_path_2a = 'brick_hallway.png'
        scene_path_2b = 'brick_hallway.png'

        scene_path = [scene_path_1a, scene_path_1b, scene_path_2a, scene_path_2b]

        #images/brick_hallway.png
      Begin Routine:
        # set target position
        if familiar_object_condition == 0:
            test_scene = scene_path[obj_side] #close condition
        else:
            test_scene = scene_path[obj_side + 2] #far condition

        #hallway_background2.Image = test_scene

        targetPos = [0, tar_dist_list[cond]]
        targetPos_y = targetPos[1]

        if targetPos_y > -0.0775:
            max_size = (targetPos_y * -10) + 0.015
        else:
            max_size = 1

        size_modifier = 1

        # determine target size
        targetSize = [0.15,0.15]

        # target movement parameters
        tar_mov = 0.01

        # display target distance on screen
        #textFill_dist = 'This target is ' + str(distance) + ' m away from you'
        #target_distance_text.setText(textFill_dist)

        # hide mouse cursor
        #win.mouseVisible = False
        #document.body.style.cursor='none';
      Each Frame:
        mouse_y = mouse.getPos()[1]
        #mouse_y=1
        #if (mouse_y > min_height) and (mouse_y < max_height):
        #    size_modifier = mouse_y

        # skip trial if position is off screen
        if targetPos[1] < -0.5:
            size_modifier = 1
            continueRoutine = False
        else:
            size_modifier = mouse_y + 0.5

            if size_modifier > max_size:
                size_modifier = max_size
            targetSize[0]=0.15*size_modifier
            targetSize[1]=0.15*size_modifier

            targetPos[1] = targetPos_y + targetSize[1]/2
      End Routine:
        # save target position data
        #thisExp.addData('tar_position', targetPos_y)
        psychoJS.experiment.addData('tar_position', targetPos_y)

        # save target size data
        #thisExp.addData('tar_size', size_modifier)
        psychoJS.experiment.addData('tar_size', size_modifier)

        # visual angle? or scene?
        #thisExp.addData(vis_angle', vis_angle)
        psychoJS.experiment.addData('familiar_object_condition', familiar_object_condition)

        # show mouse cursor
        #win.mouseVisible = True
        #document.body.style.cursor='auto';

        # add size results
        if familiar_object_condition == 0:
            size_resp_Sum[cond] = size_resp_Sum[cond] + size_modifier #close condition
        else:
            size_resp_Sum[cond + 5] = size_resp_Sum[cond + 5] + size_modifier #far condition

        trial_counter = 30

        #if vis_angle == 0:
        #    size_resp_Sum[cond] = size_resp_Sum[cond] + size_modifier
        #else:
        #    size_resp_Sum[cond+5] = size_resp_Sum[cond+5] + size_modifier
    PolygonComponent fix_cross2
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (.15, .15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent target_brick2
      fillColor = black
      lineColor = black
      pos [set every frame] = $targetPos
      saveStartStop = False
      shape = rectangle
      size [set every frame] = $targetSize
      startVal [time (s)] = 3
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    TextComponent target_distance_text
      color = black
      letterHeight = 0.035
      pos [set every frame] = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 2
      wrapWidth = 0.35
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    TextComponent test_inst_text2
      color = black
      letterHeight = 0.025
      pos = (0, .45)
      saveStartStop = False
      startVal [time (s)] = 3.5
      wrapWidth = 0.5
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      text:
        press SPACEBAR when you think the apple is the correct size.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3.5
      store = nothing
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    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent apple
      image = apple_apple.png
      pos [set every frame] = $targetPos
      size [set every frame] = $targetSize
      startVal [time (s)] = 3
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  Routine fixation_1
    PolygonComponent fix_cross
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent fixation_text
      letterHeight = 0.04
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = When there is a fixation cross on the screen, look at the cross.
      wrapWidth = .75
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    TextComponent next_text6
      color = red
      letterHeight = 0.04
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = < press SPACEBAR to start test. >
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # semi-randomization using participant number
        if int(expInfo['participant']) % 2 == 1: #odd
            familiar_object_condition = 0
        else: #even
            familiar_object_condition = 1

        #familiar_object_condition = 0
  Routine fixation_2
    PolygonComponent fix_cross3
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent fixation_text2
      letterHeight = 0.04
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = When there is a fixation cross on the screen, look at the cross.
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    TextComponent next_text8
      color = red
      letterHeight = 0.04
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = < press SPACEBAR to start test. >
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        # semi-randomization using participant number
        if int(expInfo['participant']) % 2 == 1:
            vis_angle = 1
        else:
            vis_angle = 0

        #vis_angle = 1
  Routine task1_block2_introduction
    PolygonComponent background_black12
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    PolygonComponent background_white12
      fillColor = white
      lineColor = red
      lineWidth = 20
      saveStartStop = False
      shape = rectangle
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent instru_text3
      color = black
      letterHeight = 0.04
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Time for a short break.

        The test will continue soon with some changes to the target positions.
        Task will be the same as before. There will be distance telling you how far away the block is from you. (it can be 4m, 8m, 12m, 16m, or 20m)

        *Remember to use this distance given to you in meters when considering how far the target is*

        Keep your eyes 50cm away from the screen and imagine the block is standing at the stated distance away from you in the scene.
        Adjust the block size to match the reference size (size of your smartphone) considering how far away the block is from you.

        Moving the mouse 'up' will make the block larger, 'down' will make the block smaller.
        Press SPACEBAR when you think the block is correct size (size of your smartphone).
    TextComponent next_text12
      color = red
      letterHeight = 0.04
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = < press SPACEBAR to continue test >
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    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine exp_task1_break
  Routine break_10sec
    PolygonComponent background_black13
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    PolygonComponent background_white13
      fillColor = white
      lineColor = red
      lineWidth = 20
      saveStartStop = False
      shape = rectangle
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent isntru_text_03
      color = black
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Take a 10 seconds break.

        Once the break time is over, you can continue by pressing the space bar.
    TextComponent next_text13
      color = red
      letterHeight = 0.04
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 10
      text = < press SPACEBAR to start test. >
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 10
      store = nothing
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    CodeComponent reverse_condition
      Code Type = Auto->JS
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      Begin Experiment:
        trial_counter = 0
      Begin Routine:
        # reverse familiar object condition
        if familiar_object_condition == 1:
            familiar_object_condition = 0
        else:
            familiar_object_condition = 1
      Each Frame:
        if trial_counter < 30:
            continueRoutine = False
      End Routine:
        if trial_counter >= 30:
            trial_counter = 0
Flow
  Routine introduction
  Routine exp_task2_introduction
  Routine fixation_1
  LoopInitiator size_trials_1 loopType="TrialHandler"
    conditionsFile = size_conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'cond': 0, 'obj_side': 0, 'distance': 4, 'size_modifier': 0.125},
      {'cond': 1, 'obj_side': 0, 'distance': 8, 'size_modifier': 0.0625},
      {'cond': 2, 'obj_side': 0, 'distance': 12, 'size_modifier': 0.0416666666666667},
      {'cond': 3, 'obj_side': 0, 'distance': 16, 'size_modifier': 0.03125},
      {'cond': 4, 'obj_side': 0, 'distance': 20, 'size_modifier': 0.025},
      {'cond': 0, 'obj_side': 1, 'distance': 4, 'size_modifier': 0.125},
      {'cond': 1, 'obj_side': 1, 'distance': 8, 'size_modifier': 0.0625},
      {'cond': 2, 'obj_side': 1, 'distance': 12, 'size_modifier': 0.0416666666666667},
      {'cond': 3, 'obj_side': 1, 'distance': 16, 'size_modifier': 0.03125},
      {'cond': 4, 'obj_side': 1, 'distance': 20, 'size_modifier': 0.025}]
    Routine size_task
  LoopTerminator size_trials_1
  Routine break_10sec
  LoopInitiator size_trials_2 loopType="TrialHandler"
    conditionsFile = size_conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'cond': 0, 'obj_side': 0, 'distance': 4, 'size_modifier': 0.125},
      {'cond': 1, 'obj_side': 0, 'distance': 8, 'size_modifier': 0.0625},
      {'cond': 2, 'obj_side': 0, 'distance': 12, 'size_modifier': 0.0416666666666667},
      {'cond': 3, 'obj_side': 0, 'distance': 16, 'size_modifier': 0.03125},
      {'cond': 4, 'obj_side': 0, 'distance': 20, 'size_modifier': 0.025},
      {'cond': 0, 'obj_side': 1, 'distance': 4, 'size_modifier': 0.125},
      {'cond': 1, 'obj_side': 1, 'distance': 8, 'size_modifier': 0.0625},
      {'cond': 2, 'obj_side': 1, 'distance': 12, 'size_modifier': 0.0416666666666667},
      {'cond': 3, 'obj_side': 1, 'distance': 16, 'size_modifier': 0.03125},
      {'cond': 4, 'obj_side': 1, 'distance': 20, 'size_modifier': 0.025}]
    Routine size_task
  LoopTerminator size_trials_2
  Routine exp_task1_instruction_2
  LoopInitiator distance_trials loopType="TrialHandler"
    conditionsFile = distance_conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'cond': 0, 'obj_position': 0, 'distance': 4, 'size_modifier': 0.125},
      {'cond': 1, 'obj_position': 0, 'distance': 8, 'size_modifier': 0.0625},
      {'cond': 2, 'obj_position': 0, 'distance': 12, 'size_modifier': 0.0416666666666667},
      {'cond': 3, 'obj_position': 0, 'distance': 16, 'size_modifier': 0.03125},
      {'cond': 4, 'obj_position': 0, 'distance': 20, 'size_modifier': 0.025},
      {'cond': 5, 'obj_position': 0, 'distance': 4, 'size_modifier': 0.125},
      {'cond': 6, 'obj_position': 0, 'distance': 8, 'size_modifier': 0.0625},
      {'cond': 7, 'obj_position': 0, 'distance': 12, 'size_modifier': 0.0416666666666667},
      {'cond': 8, 'obj_position': 0, 'distance': 16, 'size_modifier': 0.03125},
      {'cond': 9, 'obj_position': 0, 'distance': 20, 'size_modifier': 0.025},
      {'cond': 0, 'obj_position': 1, 'distance': 4, 'size_modifier': 0.125},
      {'cond': 1, 'obj_position': 1, 'distance': 8, 'size_modifier': 0.0625},
      {'cond': 2, 'obj_position': 1, 'distance': 12, 'size_modifier': 0.0416666666666667},
      {'cond': 3, 'obj_position': 1, 'distance': 16, 'size_modifier': 0.03125},
      {'cond': 4, 'obj_position': 1, 'distance': 20, 'size_modifier': 0.025},
      {'cond': 5, 'obj_position': 1, 'distance': 4, 'size_modifier': 0.125},
      {'cond': 6, 'obj_position': 1, 'distance': 8, 'size_modifier': 0.0625},
      {'cond': 7, 'obj_position': 1, 'distance': 12, 'size_modifier': 0.0416666666666667},
      {'cond': 8, 'obj_position': 1, 'distance': 16, 'size_modifier': 0.03125},
      {'cond': 9, 'obj_position': 1, 'distance': 20, 'size_modifier': 0.025}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
    Routine distance_task
    Routine break_10sec
  LoopTerminator distance_trials
